PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 1200]
  color = 1.0000, 1.0000, 1.0000
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = BOTH
  elTrackingMode = PUPIL_CR_TRACKING
  expName = regret_experiment
  exportHTML = manually
  eyetracker = eyetracker.eyelink.EyeTracker
  keyboardBackend = ioHub
  runMode = 1
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = BOTH
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine begin_exp
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    CodeComponent init_vars
      Code Type = Py
      Begin Experiment:
        import random

        # -------------------
        # Participant-level settings
        # -------------------
        # 0 = No-Regret, 1 = Regret-First-30, 2 = Regret-Last-30
        participant_cond = random.choice([0, 1, 2])

        # Randomize prob assignment to LEFT / UP / RIGHT once for this participant
        PROBS = [0.2, 0.5, 0.7]
        random.shuffle(PROBS)
        prob_left, prob_up, prob_right = PROBS

        # State vars
        trial_num = 0      # increments each main trial
        points = 0         # outcome from last trial

        # Put mapping in expInfo so it is saved with the data file header
        expInfo['participant_cond'] = participant_cond
        expInfo['prob_left']  = prob_left
        expInfo['prob_up']    = prob_up
        expInfo['prob_right'] = prob_right
    TextComponent begin
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please press the space bar when ready to begin
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    KeyboardComponent advance_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
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    TextComponent fixcross
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent jitter_code1
      Code Type = Py
      Begin Routine:
        # Jitter range (seconds)
        fixMin = 0.5
        fixMax = 1.5

        # Uniform jitter
        fixDur = random.uniform(fixMin, fixMax)

        # (optional) tidy precision
        fixDur = round(fixDur, 3)
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent fixation_eye
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage(f"FIX_{trial_num}")
  Routine Choice
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    ImageComponent tree1_img
      image = images/tree-1.png
      pos = (-300, 0)
      size = 200, 200
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent tree2_img
      image = images/tree-2.png
      size = 200, 200
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent tree3_img
      image = images/tree-3.png
      pos = (300, 0)
      size = 200, 200
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_1
      allowedKeys = 'left', 'right', 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent choice_logic
      Code Type = Py
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      Begin Routine:
        trial_num += 1
        thisExp.addData('trial_num', trial_num)

        # optional: log participant-level constants each trial
        thisExp.addData('participant_cond', participant_cond)
        thisExp.addData('prob_left', prob_left)
        thisExp.addData('prob_up', prob_up)
        thisExp.addData('prob_right', prob_right)
      End Routine:
        # Log decision
        thisExp.addData('trial_num', trial_num)
        thisExp.addData('participant_cond', participant_cond)

        # chosen key + RT
        choice_key = key_resp_1.keys
        choice_rt  = key_resp_1.rt
        thisExp.addData('choice_key', choice_key)
        thisExp.addData('choice_rt', choice_rt)

        # We'll fill in choice_prob & points in Feedback (after outcome known)
    CodeComponent choice_eye
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage(f"CHOICE_{trial_num}")
  Routine Feedback
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    CodeComponent code_feedback
      Code Type = Py
      Before Experiment:
        apple_pos = (0, 0)
        apple_img = 'images/apple-neg.png'
        points = 0
        tree_prob = 0.0
        import random
      Begin Routine:
        # Which key was chosen on that trial?
        k = choice_key  # from Choice End Routine variable (defined above)
        # (if you prefer, use: k = getattr(key_resp_1, 'keys', None))

        # Map key to prob + apple position
        if k == 'left':
            apple_pos = (-300, 200)
            tree_prob = prob_left
        elif k == 'up':
            apple_pos = (0, 200)
            tree_prob = prob_up
        elif k == 'right':
            apple_pos = (300, 200)
            tree_prob = prob_right
        else:
            apple_pos = (0, 0)
            tree_prob = 0.0  # no response / unexpected key

        # Outcome
        if random.random() < float(tree_prob):
            apple_img = 'images/apple-high.png'
            points = 1
        else:
            apple_img = 'images/apple-neg.png'
            points = 0

        # Update display stim
        appleImage.setPos(apple_pos)
        appleImage.setImage(apple_img)

        # Log prob + outcome
        thisExp.addData('choice_prob', tree_prob)
        thisExp.addData('points', points)

        # Also helpful to repeat mapping (participant-level constants) each row
        thisExp.addData('prob_left', prob_left)
        thisExp.addData('prob_up', prob_up)
        thisExp.addData('prob_right', prob_right)
    ImageComponent appleImage
      image [set every repeat] = $apple_img
      pos = (0, 200)
      size = 150, 150
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    ImageComponent tree1
      image = images/tree-1.png
      pos = (-300, 0)
      size = 200, 200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    ImageComponent tree2
      image = images/tree-2.png
      size = 200, 200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    ImageComponent tree3
      image = images/tree-3.png
      pos = (300, 0)
      size = 200, 200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    CodeComponent feedback_eye
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage(f"FEEDBACK_{trial_num}")
  Routine RegretRating
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    ImageComponent regret_scale
      image = images/regret_scale.png
      pos = (0, -200)
      size = 400, 192
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent regret_key
      allowedKeys = '1', '2', '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent regretlogic
      Code Type = Py
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      Begin Experiment:
        skip_regret = False

        apple_pos = (0, 0)
        apple_img = 'images/apple-neg.png'
        points = 0
        tree_prob = 0.0
        import random
      Begin Routine:
        # Which key was chosen on that trial?
        k = choice_key  # from Choice End Routine variable (defined above)
        # (if you prefer, use: k = getattr(key_resp_1, 'keys', None))

        # Map key to prob + apple position
        if k == 'left':
            apple_pos = (-300, 200)
            tree_prob = prob_left
        elif k == 'up':
            apple_pos = (0, 200)
            tree_prob = prob_up
        elif k == 'right':
            apple_pos = (300, 200)
            tree_prob = prob_right
        else:
            apple_pos = (0, 0)
            tree_prob = 0.0  # no response / unexpected key

        # Show regret question only if:
        # participant_cond == 1 (Regret-First-30) AND
        # trial_num <= 30 AND
        # points == 0 (just lost)
        skip_regret = not ((participant_cond == 1 and trial_num <= 30 and points == 0) or (participant_cond == 2 and trial_num > 30 and points == 0))
        if skip_regret:
            continueRoutine = False
            # We'll pre-log NA so each trial row has something
            thisExp.addData('regret_rating', 'NA')
            thisExp.addData('regret_rt', 'NA')
        else:
            # ensure the same outcome display as in Feedback
            appleImage.setPos(apple_pos)
            appleImage.setImage(apple_img)
            appleImage.setAutoDraw(True)
      End Routine:
        if not skip_regret:
            k = regret_key.keys
            if k in (None, ''):
                rating = 'NA'
            elif k == '0':
                rating = 10
            else:
                rating = int(k)
            thisExp.addData('regret_rating', rating)
            thisExp.addData('regret_rt', regret_key.rt)

        for stim in (appleImage, tree1, tree2, tree3):
            stim.setAutoDraw(False)
    ImageComponent rtree1
      image = images/tree-1.png
      pos = (-300, 0)
      size = 200, 200
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent rtree2
      image = images/tree-2.png
      size = 200, 200
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent rtree3
      image = images/tree-3.png
      pos = (300, 0)
      size = 200, 200
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent regret_eye
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage(f"REGRET_{trial_num}")
  Routine ITI
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    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent jitter_code2
      Code Type = Py
      Begin Routine:
        # Jitter range (seconds)
        fixMin = 0.5
        fixMax = 1.5

        # Uniform jitter
        fixDur = random.uniform(fixMin, fixMax)

        # (optional) tidy precision
        fixDur = round(fixDur, 3)
  Routine EndScreen
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    TextComponent end_display
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!
    CodeComponent end_experiment
      Code Type = Py
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      Begin Routine:
        # ---- EndScreen Begin Routine ----
        import numpy as np

        ratings = trials.data.get('regret_rating', [])  # already exists now
        ratings = [float(r) for r in ratings if r not in ('NA', '', None)]
        avg_regret = round(np.mean(ratings), 2) if ratings else 'N/A'

        pts = trials.data.get('points', [])
        pts = [float(p) for p in pts if p not in ('', None)]

        thisExp.addData('avg_regret', avg_regret)

        end_display.text = f"Thank you for participating!"
Flow
  Routine begin_exp
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 60
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    conditions:
      [{'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.8, 'tree2_prob': 0.5, 'tree3_prob': 0.2, 'condition': 1},
      {'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.2, 'tree2_prob': 0.5, 'tree3_prob': 0.8, 'condition': 2},
      {'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.6, 'tree2_prob': 0.6, 'tree3_prob': 0.6, 'condition': 3},
      {'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.9, 'tree2_prob': 0.1, 'tree3_prob': 0.1, 'condition': 4}]
    Routine Fixation
    Routine Choice
    Routine Feedback
    Routine RegretRating
    Routine ITI
  LoopTerminator trials
  Routine EndScreen
