PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = regret_experiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instructions
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    ImageComponent instructions1
      image = /Users/anhthudang/Downloads/regret_eyetracking-main/images/instructions01.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent instructions2
      disabled = True
      image = /Users/anhthudang/Downloads/regret_eyetracking-main/images/instructions02.png
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_escape
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_escape
      Code Type = Py
      Begin Experiment:
        if 'escape' in event.getKeys():
            core.quit()
  Routine Fixation
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    TextComponent fixcross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent key_escape1
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_escape1
      Code Type = Py
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      Begin Experiment:
        if 'escape' in event.getKeys():
            core.quit()
  Routine Choice
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    ImageComponent tree1_img
      image = images/tree-1.png
      pos = (-300, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent tree2_img
      image = images/tree-2.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent tree3_img
      image = images/tree-3.png
      pos = (300, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MouseComponent mouse
      clickable = tree1, tree2, tree3
      disabled = True
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_1
      allowedKeys = 'left','right','up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_choice
      Code Type = Py
      End Routine:
        keys = event.getKeys(keyList=['left', 'up', 'right'])

        if keys:
            key = keys[0]
            if key == 'left':
                choice = 0
            elif key == 'up':
                choice = 1
            elif key == 'right':
                choice = 2
        else:
            choice = None  # or some default

        import random

        # Define the probability of ripe fruit for each tree
        tree_probs = [0.7, 0.2, 0.5]  # example probabilities

        if choice is not None:
            prob_ripe = tree_probs[choice]
            outcome = 'ripe' if random.random() < prob_ripe else 'rotten'
        else:
            outcome = 'rotten'  # or handle no choice case
    KeyboardComponent key_escape2
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_escape2
      Code Type = Py
      Begin Experiment:
        if 'escape' in event.getKeys():
            core.quit()
  Routine Feedback
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    CodeComponent code_feedback
      Code Type = Py
      Begin Routine:
        if key_resp_choice.keys == 'left':
            apple_pos = [-300, 0]
            tree_prob = tree1_prob
        elif key_resp_choice.keys == 'up':
            apple_pos = [0, 0]
            tree_prob = tree2_prob
        elif key_resp_choice.keys == 'right':
            apple_pos = [300, 0]
            tree_prob = tree3_prob

        # Determine if ripe or rotten
        import random
        if random.random() < tree_prob:
            apple_img = 'images/apple-high.png'
            points = 1
        else:
            apple_img = 'images/apple-neg.png'
            points = 0
    ImageComponent appleImage
      image [set every repeat] = $apple_img
      pos = apple_pos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    VariableComponent apple_img
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    VariableComponent apple_pos
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    KeyboardComponent key_escape3
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_escape3
      Code Type = Py
      Begin Experiment:
        if 'escape' in event.getKeys():
            core.quit()
  Routine RegretRating
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        How much do you regret this choice? Press a number key from 1-0, with 0 representing 10.

        1                      5                   0(10)
        <---------------------------------------------->
        Not                                         Very
        very                                        Much
        much
    KeyboardComponent regret_key
      allowedKeys = '1,' '2,' '3,' '4,' '5,' '6,' '7,' '8,' '9', '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_rating
      Code Type = Py
      End Routine:
        if regret_key.keys == '0':
            rating = 10
        else:
            rating = int(regret_key.keys)
        thisExp.addData('regret_rating', rating)
    CodeComponent code_skip
      Code Type = Py
      Begin Experiment:
        if not (condition == 2 and points == 0):
            continueRoutine = False
    KeyboardComponent key_escape4
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_escape4
      Code Type = Py
      Begin Experiment:
        if 'escape' in event.getKeys():
            core.quit()
  Routine ITI
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    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_escape5
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_escape5
      Code Type = Py
      Begin Experiment:
        if 'escape' in event.getKeys():
            core.quit()
  Routine EndScreen
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    CodeComponent end_experiment
      Code Type = Py
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      Begin Experiment:
        import numpy as np

        regret_ratings = [r for r in trials.data['regret_rating'] if r != 'NA']
        if regret_ratings:
            avg_regret = round(np.mean(regret_ratings), 2)
        else:
            avg_regret = 'N/A'

        # Optional: total score
        total_points = sum(trials.data['points'])
    CodeComponent code_display
      Code Type = Py
Flow
  LoopInitiator instructions loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'instruction_img': 'images/instruction01.png'},
      {'instruction_img': 'images/instruction02.png'},
      {'instruction_img': 'images/instruction03.png'},
      {'instruction_img': 'images/instruction04.png'}]
    Routine Instructions
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/anhthudang/Downloads/regret_eyetracking-main/conditions.xlsx
    loopType = sequential
    nReps = 60
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    conditions:
      [{'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.8, 'tree2_prob': 0.5, 'tree3_prob': 0.2, 'condition': 1},
      {'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.2, 'tree2_prob': 0.5, 'tree3_prob': 0.8, 'condition': 2},
      {'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.6, 'tree2_prob': 0.6, 'tree3_prob': 0.6, 'condition': 3},
      {'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.9, 'tree2_prob': 0.1, 'tree3_prob': 0.1, 'condition': 4}]
    Routine Fixation
    Routine Choice
    Routine Feedback
    Routine RegretRating
    Routine ITI
  LoopTerminator trials
  Routine EndScreen
